global device ML_STAR ("AxyPrep_Mag_Cleanup.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "ChannelPatternLibrary.hsl" }
 namespace _Method { #include "StepTracker\\StepTracker.hs_" }
#include "AxyPrep_Mag_Cleanup.res"
variable sim;
dialog customDialog_1;
variable num_samples;
variable TIME_MAG_INCUBATION;
variable NO;
variable TIME_ETOH_DRYING;
variable num_used_channels;
variable VOL_ELUTION_BUFFER;
variable VOL_ETHANOL;
variable channel_pattern;
variable NUM_ETOH_WASHES;
variable VOL_BEADS_ISO;
variable BOOL_RESTART_TIMER;
variable CANCEL;
variable TIME_ELUTION_BUFFER;
variable test_channel_pattern;
variable TIME_BEAD_INCUBATION;
variable TIME_ETOH_INCUBATION;
variable ABORT;
variable OK;
variable VOL_BEAD_PLUS_RAW_SAMPLE;
variable single_channel_pattern;
variable num_pipette_rounds;
variable counter_bead_transfer;
variable counter_bool_loop;
variable counter_bead_iso_aspirate;
variable num_pipette_rounds_base0;
variable counter_bead_removal;
variable counter_ethanol_add;
variable counter_ethanol_add_aspirate;
variable counter_ethanol_wash;
variable loopCounter1;
variable counter_ethanol_remove;
variable counter_elution_buffer_aspirate;
variable counter_elution_buffer_add;
variable counter_final_elute;
variable dialogRet;
variable VOL_SAMPLE;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable Timer_EtOH_Incubation_1;
variable Timer_Mag_Incubation_1;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
variable Timer_EtOH_Drying_1;
dialog customDialog_10;
dialog customDialog_11;
variable Timer_Mag_Incubation_3;
variable counter_ethanol_removal;
variable index_button;
variable label_button;
variable mix_tmp_pos;
variable mix_pos;
variable cnt_pos_zero;
variable VOL_EPPENDORF_MAX;
dialog customDialog_12;
variable vol_bead_isopropanol;
dialog customDialog_13;
dialog customDialog_14;
dialog customDialog_15;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    STEPTRACKER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    if(0){
      customDialog_13.InitCustomDialog("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");
      customDialog_13.SetCustomDialogProperty( "textBlock3.Text", single_channel_pattern );
      customDialog_13.SetCustomDialogProperty( "textBlock5.Text", vol_bead_isopropanol );
      customDialog_13.ShowCustomDialog();
      dialogRet = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      CheckRetVal(dialogRet);
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    sim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (sim != 1)
    {
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.tip_50, Translate("tc50"), Translate("Please edit the 50uL Tip Count if required."), 1, 999);
      TipCount::Edit2(ML_STAR.tip_300, Translate("tc300"), ML_STAR, 999);
      TipCount::Edit2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR, 999);
    }
    VOL_SAMPLE = 0;
    VOL_BEADS_ISO = 0;
    VOL_ETHANOL = 0;
    VOL_BEAD_PLUS_RAW_SAMPLE = 0;
    VOL_ELUTION_BUFFER = 0;
    VOL_EPPENDORF_MAX = 1700;
    TIME_BEAD_INCUBATION = 300;
    TIME_MAG_INCUBATION = 180;
    TIME_ETOH_INCUBATION = 30;
    TIME_ETOH_DRYING = 300;
    TIME_ELUTION_BUFFER = 60;
    OK = 1;
    CANCEL = 2;
    ABORT = 3;
    NO = 7;
    BOOL_RESTART_TIMER = 0;
    NUM_ETOH_WASHES = 0;
    channel_pattern = Translate("00000000");
    single_channel_pattern = Translate("00000000");
    test_channel_pattern = Translate("10000000");
    num_samples = 0;
    num_used_channels = 0;
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    dialogRet = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(dialogRet);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    dialogRet = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    num_samples = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    VOL_BEADS_ISO = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    VOL_ETHANOL = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
    NUM_ETOH_WASHES = customDialog_1.GetCustomDialogProperty( "numeric4.Value" );
    VOL_ELUTION_BUFFER = customDialog_1.GetCustomDialogProperty( "numeric5.Value" );
    VOL_SAMPLE = customDialog_1.GetCustomDialogProperty( "numeric6.Value" );
    CheckRetVal(dialogRet);
    VOL_BEAD_PLUS_RAW_SAMPLE = VOL_BEADS_ISO + VOL_SAMPLE;
    num_pipette_rounds_base0 = num_samples / 8;
    num_pipette_rounds = num_pipette_rounds_base0 + 1;
    ChannelPatternLibrary::CreateChannelPattern(num_samples);
    {
      for(counter_bead_transfer = 0; counter_bead_transfer < num_pipette_rounds;)
      {
        counter_bead_transfer = counter_bead_transfer + 1;
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_bead_transfer);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_bead_transfer);
        onerror goto errLabel_16 ;
        err.Clear();
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        errLabel_16 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          customDialog_12.InitCustomDialog("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");
          customDialog_12.ShowCustomDialog();
          BOOL_RESTART_TIMER = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
          abort;
        }   /* end if from skip handler if no error */
        HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
        {
          for(counter_bead_iso_aspirate = 0; counter_bead_iso_aspirate < num_used_channels;)
          {
            counter_bead_iso_aspirate = counter_bead_iso_aspirate + 1;
            single_channel_pattern = ChannelPatternLibrary::GetSingleChannel(counter_bead_iso_aspirate);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    customDialog_14.InitCustomDialog("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");
    customDialog_14.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(BOOL_RESTART_TIMER);
    {
      counter_bool_loop = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_bool_loop = counter_bool_loop + 1;
        STEPTRACKER::START_Timer(Timer_Mag_Incubation_1, Translate("Room Temperature Incubation"), Translate("Big Font"), 0, 0, TIME_BEAD_INCUBATION, 1, 0, 12, 2, Translate("Room Temperature Incubation"));
        customDialog_15.InitCustomDialog("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");
        customDialog_15.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
        CheckRetVal(BOOL_RESTART_TIMER);
      }
    }
    STEPTRACKER::START_Activity(Translate("Transport To Magnet"), Translate(""), 24, 2);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    STEPTRACKER::TERMINATE_ALL();
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(BOOL_RESTART_TIMER);
    {
      counter_bool_loop = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_bool_loop = counter_bool_loop + 1;
        STEPTRACKER::START_Timer(Timer_Mag_Incubation_1, Translate("Magnet Incubation"), Translate(""), 0, 0, TIME_MAG_INCUBATION, 1, 0, 5, 2, Translate("Magnet Incubation"));
        customDialog_4.InitCustomDialog("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");
        customDialog_4.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        CheckRetVal(BOOL_RESTART_TIMER);
      }
    }
    STEPTRACKER::START_Activity(Translate("Remove Supernatant"), Translate(""), 13, 2);
    {
      for(counter_bead_removal = 0; counter_bead_removal < num_pipette_rounds;)
      {
        counter_bead_removal = counter_bead_removal + 1;
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_bead_removal);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_bead_removal);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STEPTRACKER::TERMINATE_ALL();
    ML_STAR.Plate_On_Magnet.SetCurrentPosition(1);
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    dialogRet = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(dialogRet);
    {
      for(counter_ethanol_wash = 0; counter_ethanol_wash < NUM_ETOH_WASHES;)
      {
        counter_ethanol_wash = counter_ethanol_wash + 1;
        STEPTRACKER::START_Activity(Translate("Ethanol Wash"), Translate("Adding ethanol to bead-bound sample."), 14, 2);
        {
          for(counter_ethanol_add = 0; counter_ethanol_add < num_pipette_rounds;)
          {
            counter_ethanol_add = counter_ethanol_add + 1;
            channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_ethanol_add);
            num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_ethanol_add);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            {
              for(counter_ethanol_add_aspirate = 0; counter_ethanol_add_aspirate < num_used_channels;)
              {
                counter_ethanol_add_aspirate = counter_ethanol_add_aspirate + 1;
                single_channel_pattern = ChannelPatternLibrary::GetSingleChannel(counter_ethanol_add_aspirate);
                ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              }
            }
            ML_STAR.Trough_Ethanol_Waste.SetCurrentPosition(1);
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
        STEPTRACKER::TERMINATE_ALL();
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
        CheckRetVal(BOOL_RESTART_TIMER);
        {
          counter_bool_loop = 0;
          while (BOOL_RESTART_TIMER != NO)
          {
            counter_bool_loop = counter_bool_loop + 1;
            STEPTRACKER::START_Timer(Timer_EtOH_Incubation_1, Translate("Ethanol Incubation"), Translate(""), 0, 0, TIME_ETOH_INCUBATION, 1, 0, 12, 2, Translate("Ethanol Incubation"));
            customDialog_8.InitCustomDialog("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");
            customDialog_8.ShowCustomDialog();
            BOOL_RESTART_TIMER = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
          }
        }
        SeqResetMagPlate();
        STEPTRACKER::START_Activity(Translate("Ethanol Removal"), Translate(""), 13, 2);
        {
          for(counter_ethanol_remove = 0; counter_ethanol_remove < num_pipette_rounds;)
          {
            counter_ethanol_remove = counter_ethanol_remove + 1;
            channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_ethanol_remove);
            num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_ethanol_remove);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR.Trough_Ethanol_Waste.SetCurrentPosition(1);
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          }
        }
        STEPTRACKER::TERMINATE_ALL();
        SeqResetMagPlate();
      }
    }
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(BOOL_RESTART_TIMER);
    {
      loopCounter1 = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        loopCounter1 = loopCounter1 + 1;
        STEPTRACKER::START_Timer(Timer_EtOH_Drying_1, Translate("Ethanol Drying"), Translate(""), 0, 0, TIME_ETOH_DRYING, 1, 0, 0, 2, Translate("Ethanol Drying"));
        customDialog_7.InitCustomDialog("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");
        customDialog_7.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
        CheckRetVal(BOOL_RESTART_TIMER);
      }
    }
    STEPTRACKER::START_Activity(Translate("Residual Ethanol Removal"), Translate(""), 13, 2);
    {
      for(counter_ethanol_removal = 0; counter_ethanol_removal < num_pipette_rounds;)
      {
        counter_ethanol_removal = counter_ethanol_removal + 1;
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_ethanol_removal);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_ethanol_removal);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR.Trough_Ethanol_Waste.SetCurrentPosition(1);
      }
    }
    STEPTRACKER::TERMINATE_ALL();
    ML_STAR.Plate_On_Magnet.SetCurrentPosition(1);
    STEPTRACKER::START_Activity(Translate("Transport Off Magnet"), Translate(""), 24, 2);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    STEPTRACKER::TERMINATE_ALL();
    SeqResetMagPlate();
    ML_STAR.Plate_Raw_Samples.SetCurrentPosition(1);
    {
      for(counter_elution_buffer_add = 0; counter_elution_buffer_add < num_pipette_rounds;)
      {
        counter_elution_buffer_add = counter_elution_buffer_add + 1;
        STEPTRACKER::START_Activity(Translate("Adding Elution Buffer"), Translate(""), 14, 2);
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_elution_buffer_add);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_elution_buffer_add);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(counter_elution_buffer_aspirate = 0; counter_elution_buffer_aspirate < num_used_channels;)
          {
            counter_elution_buffer_aspirate = counter_elution_buffer_aspirate + 1;
            single_channel_pattern = ChannelPatternLibrary::GetSingleChannel(counter_elution_buffer_aspirate);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        STEPTRACKER::TERMINATE_ALL();
        cnt_pos_zero = counter_elution_buffer_add - 1;
        mix_tmp_pos = cnt_pos_zero * 8;
        mix_pos = mix_tmp_pos + 1;
        ML_STAR.Plate_Raw_Samples.SetCurrentPosition(mix_pos);
        STEPTRACKER::START_Activity(Translate("Mixing Beads"), Translate(""), 15, 2);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        STEPTRACKER::TERMINATE_ALL();
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR.Plate_On_Magnet.SetCurrentPosition(1);
    STEPTRACKER::START_Activity(Translate("Transport to Magnet"), Translate(""), 24, 2);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    STEPTRACKER::TERMINATE_ALL();
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
    CheckRetVal(BOOL_RESTART_TIMER);
    {
      counter_bool_loop = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_bool_loop = counter_bool_loop + 1;
        STEPTRACKER::START_Timer(Timer_Mag_Incubation_3, Translate("Magnet Incubation"), Translate("Separating beads from eluted supernatant"), 0, 0, TIME_ELUTION_BUFFER, 1, 0, 5, 2, Translate("Magnet Incubation"));
        customDialog_10.InitCustomDialog("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");
        customDialog_10.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        CheckRetVal(BOOL_RESTART_TIMER);
      }
    }
    SeqResetMagPlate();
    STEPTRACKER::START_Activity(Translate("Elutant Recovery"), Translate(""), 13, 2);
    {
      for(counter_final_elute = 0; counter_final_elute < num_pipette_rounds;)
      {
        counter_final_elute = counter_final_elute + 1;
        channel_pattern = ChannelPatternLibrary::CreateChannelPatternString(counter_final_elute);
        num_used_channels = ChannelPatternLibrary::GetNumChannels(counter_final_elute);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STEPTRACKER::TERMINATE_ALL();
    if (sim != 1)
    {
      TipCount::Write2(ML_STAR.tip_1000, Translate("tc_1000"), ML_STAR);
      TipCount::Write2(ML_STAR.tip_300, Translate("tc_300"), ML_STAR);
      TipCount::Write2(ML_STAR.tip_50, Translate("tc_50"), ML_STAR);
    }
    STEPTRACKER::START_Activity_WithButtons(Translate("Protocol Complete"), Translate("The purification protocol has finished!"), 7, 2, Translate("Ok"), Translate(""), Translate(""), Translate(""), 0, index_button, label_button);
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    STEPTRACKER::_ExitLibrary();
  } }
