private function CheckRetVal( variable RetVal ) void ;
private function SeqResetMagPlate(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private sequence default;
  if(0){
    STEPTRACKER::TERMINATE_ALL();
  }
  if (sim != 1)
  {
    TipCount::Write2(ML_STAR.tip_300, Translate("tc300"), ML_STAR);
    TipCount::Write2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.tip_50, Translate("tc50"), default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 0, ML_STAR.tip_50, 0, 8, 0, 0, Translate("Please Reload 50uL NTR Tips!!!"), 999);
  }
}

private function SeqResetMagPlate(  ) void {
  ML_STAR.Plate_On_Magnet.SetCurrentPosition(1);
  ML_STAR.Plate_On_Magnet.SetCount(num_samples);
}

private function CheckRetVal( variable RetVal ) void {
  if (RetVal == ABORT)
  {
    abort;
  }
}
