 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "ML-STAR-Axygen-Purification\\lib\\StepTracker\\StepTracker.hs_" }
#include "ML-STAR-Axygen-Purification\\src\\AxyPrep_Mag.res"
global device ML_STAR ("ML-STAR-Axygen-Purification\\src\\AxyPrep_Mag.lay", "ML_STAR", hslTrue);
variable sim;
dialog customDialog_1;
variable vol_beadiso;
variable num_samples;
variable NO;
variable num_washes;
variable channel_pattern;
variable BOOL_RESTART_TIMER;
variable CANCEL;
variable ABORT;
variable OK;
variable retValue;
timer timer_mag_incubation_1;
variable counter_restart_timer;
variable vol_sample;
variable vol_beadisosample;
variable height_trough_dispense;
variable counter_ethanol_wash;
variable vol_ethanol;
variable counter_pipette_rounds;
variable counter_bool_loop;
variable height_magnet_plate_dispense;
sequence default;
dialog customDialog_2;
dialog customDialog_3;
variable TIME_MAG_INCUBATION;
variable TIME_ETOH_DRYING;
variable TIME_ELUTION_BUFFER;
variable TIME_ETOH_INCUBATION;
variable TIME_BEAD_INCUBATION;
timer timer_bead_incubation_1;
variable return_dialog_value;
timer timer_ethanol_incubation_1;
dialog customDialog_4;
timer timer_ethanol_drying_1;
variable vol_residual_ethanol;
variable vol_elution_buffer;
variable height_elution_dispense;
dialog customDialog_5;
timer timer_eb_incubation_1;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
variable vol_ethanolRemoval;
dialog customDialog_12;
variable BOOL_MANUAL_DRYING_PROMPT;
variable SYS_NUM_CHANNELS;
variable NTR50_ROW1;
variable NTR50_ROW2;
variable NTR50_ROW3;
variable NTR50_ROW4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    STEPTRACKER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    sim = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (sim != 1)
    {
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.tip_50, Translate("tc50"), Translate("50 uL Tips Edit"), 1, 999);
      TipCount::Edit2(ML_STAR.tip_300, Translate("tc300"), ML_STAR, 999);
      TipCount::Edit2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR, 999);
    }
    num_samples = 0;
    vol_beadiso = 0;
    num_washes = 0;
    vol_sample = 0;
    vol_beadisosample = 0;
    vol_ethanol = 0;
    vol_residual_ethanol = 50;
    vol_elution_buffer = 0;
    OK = 1;
    CANCEL = 2;
    ABORT = 3;
    NO = 7;
    retValue = 0;
    BOOL_RESTART_TIMER = 0;
    TIME_BEAD_INCUBATION = 300;
    TIME_MAG_INCUBATION = 180;
    TIME_ETOH_INCUBATION = 30;
    TIME_ETOH_DRYING = 300;
    TIME_ELUTION_BUFFER = 60;
    SYS_NUM_CHANNELS = 8;
    if(0){
      channel_pattern = Translate("00000000");
    }
    channel_pattern = Translate("11111111");
    height_trough_dispense = 35;
    height_magnet_plate_dispense = 10;
    height_elution_dispense = 10;
    NTR50_ROW1 = 480;
    NTR50_ROW2 = 960;
    NTR50_ROW3 = 1440;
    NTR50_ROW4 = 1920;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    return_dialog_value = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    num_samples = customDialog_1.GetCustomDialogProperty( "button_numsamples.Value" );
    vol_beadiso = customDialog_1.GetCustomDialogProperty( "button_volbeadiso.Value" );
    vol_sample = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    num_washes = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    vol_ethanol = customDialog_1.GetCustomDialogProperty( "numeric3.Value" );
    vol_elution_buffer = customDialog_1.GetCustomDialogProperty( "numeric4.Value" );
    CheckRetValue(return_dialog_value);
    vol_beadisosample = vol_beadiso + vol_sample;
    ML_STAR.plate_sample.SetCount(num_samples);
    ML_STAR.plate_magnet.SetCount(num_samples);
    ML_STAR.plate_final.SetCount(num_samples);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_sample.SetCurrentPosition(1);
      ML_STAR.tube_beadiso.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_sample.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_sample, 1, ML_STAR.tip_300, 1, ML_STAR.tube_beadiso, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        CheckTipSeq(ML_STAR.plate_sample);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.plate_sample.GetCurrentPosition() > 0 && ML_STAR.plate_sample.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_sample.SetMax(ML_STAR.plate_sample.GetTotal());
      ML_STAR.tip_300.SetMax(ML_STAR.tip_300.GetTotal());
      ML_STAR.tube_beadiso.SetMax(ML_STAR.tube_beadiso.GetTotal());
      ML_STAR.plate_sample.SetCurrentPosition(1);
      ML_STAR.tube_beadiso.SetCurrentPosition(1);
    }
    channel_pattern = Translate("11111111");
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(BOOL_RESTART_TIMER);
    {
      counter_restart_timer = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_restart_timer = counter_restart_timer + 1;
        if( 0 == timer_bead_incubation_1.SetTimer(TIME_BEAD_INCUBATION) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer_bead_incubation_1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        customDialog_10.InitCustomDialog("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");
        customDialog_10.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
        CheckRetValue(BOOL_RESTART_TIMER);
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(BOOL_RESTART_TIMER);
    {
      counter_restart_timer = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_restart_timer = counter_restart_timer + 1;
        if( 0 == timer_mag_incubation_1.SetTimer(TIME_MAG_INCUBATION) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer_mag_incubation_1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        customDialog_3.InitCustomDialog("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");
        customDialog_3.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
        CheckRetValue(BOOL_RESTART_TIMER);
      }
    }
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    channel_pattern = Translate("11111111");
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_magnet.SetCurrentPosition(1);
      ML_STAR.trough_waste.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_magnet, 1, ML_STAR.tip_300, 1, ML_STAR.trough_waste, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        CheckTipSeq(ML_STAR.plate_magnet);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR.trough_waste.SetCurrentPosition(1);
        if (
           (ML_STAR.plate_magnet.GetCurrentPosition() > 0 && ML_STAR.plate_magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_magnet.SetMax(ML_STAR.plate_magnet.GetTotal());
      ML_STAR.tip_300.SetMax(ML_STAR.tip_300.GetTotal());
      ML_STAR.trough_waste.SetMax(ML_STAR.trough_waste.GetTotal());
      ML_STAR.plate_magnet.SetCurrentPosition(1);
      ML_STAR.trough_waste.SetCurrentPosition(1);
    }
    channel_pattern = Translate("11111111");
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    channel_pattern = Translate("11111111");
    {
      for(counter_ethanol_wash = 0; counter_ethanol_wash < num_washes;)
      {
        counter_ethanol_wash = counter_ethanol_wash + 1;
        {
          counter_pipette_rounds = 0;
          ML_STAR.plate_magnet.SetCurrentPosition(1);
          ML_STAR.trough_ethanol.SetCurrentPosition(1);
          while (
             (ML_STAR.plate_magnet.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.plate_magnet, 1, ML_STAR.tip_300, 1, ML_STAR.trough_ethanol, 1);
            counter_pipette_rounds = counter_pipette_rounds + 1;
            CheckTipSeq(ML_STAR.plate_magnet);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            ML_STAR.trough_ethanol.SetCurrentPosition(1);
            if (
               (ML_STAR.plate_magnet.GetCurrentPosition() > 0 && ML_STAR.plate_magnet.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.plate_magnet.SetMax(ML_STAR.plate_magnet.GetTotal());
          ML_STAR.tip_300.SetMax(ML_STAR.tip_300.GetTotal());
          ML_STAR.trough_ethanol.SetMax(ML_STAR.trough_ethanol.GetTotal());
          ML_STAR.plate_magnet.SetCurrentPosition(1);
          ML_STAR.trough_ethanol.SetCurrentPosition(1);
        }
        customDialog_7.InitCustomDialog("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");
        customDialog_7.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
        CheckRetValue(BOOL_RESTART_TIMER);
        {
          counter_bool_loop = 0;
          while (BOOL_RESTART_TIMER != NO)
          {
            counter_bool_loop = counter_bool_loop + 1;
            if( 0 == timer_ethanol_incubation_1.SetTimer(TIME_ETOH_INCUBATION) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == timer_ethanol_incubation_1.WaitTimer(hslTrue, hslTrue) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            customDialog_2.InitCustomDialog("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");
            customDialog_2.ShowCustomDialog();
            BOOL_RESTART_TIMER = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
            CheckRetValue(BOOL_RESTART_TIMER);
          }
        }
        ML_STAR.plate_magnet.SetCurrentPosition(1);
        {
          counter_pipette_rounds = 0;
          ML_STAR.plate_magnet.SetCurrentPosition(1);
          ML_STAR.trough_waste.SetCurrentPosition(1);
          while (
             (ML_STAR.plate_magnet.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.plate_magnet, 1, ML_STAR.tip_300, 1, ML_STAR.trough_waste, 1);
            counter_pipette_rounds = counter_pipette_rounds + 1;
            CheckTipSeq(ML_STAR.plate_magnet);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            vol_ethanolRemoval = vol_ethanol + 75;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            ML_STAR.trough_waste.SetCurrentPosition(1);
            if (
               (ML_STAR.plate_magnet.GetCurrentPosition() > 0 && ML_STAR.plate_magnet.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.plate_magnet.SetMax(ML_STAR.plate_magnet.GetTotal());
          ML_STAR.tip_300.SetMax(ML_STAR.tip_300.GetTotal());
          ML_STAR.trough_waste.SetMax(ML_STAR.trough_waste.GetTotal());
          ML_STAR.plate_magnet.SetCurrentPosition(1);
          ML_STAR.trough_waste.SetCurrentPosition(1);
        }
        ML_STAR.plate_magnet.SetCurrentPosition(1);
      }
    }
    channel_pattern = Translate("11111111");
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(BOOL_RESTART_TIMER);
    {
      counter_bool_loop = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_bool_loop = counter_bool_loop + 1;
        if( 0 == timer_ethanol_drying_1.SetTimer(TIME_ETOH_DRYING) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer_ethanol_drying_1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        customDialog_4.InitCustomDialog("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");
        customDialog_4.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
        CheckRetValue(BOOL_RESTART_TIMER);
      }
    }
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    channel_pattern = Translate("11111111");
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_magnet.SetCurrentPosition(1);
      ML_STAR.trough_waste.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_magnet, 1, ML_STAR.tip_50, 1, ML_STAR.trough_waste, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        CheckTipSeq(ML_STAR.plate_magnet);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR.trough_waste.SetCurrentPosition(1);
        if (
           (ML_STAR.plate_magnet.GetCurrentPosition() > 0 && ML_STAR.plate_magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_magnet.SetMax(ML_STAR.plate_magnet.GetTotal());
      ML_STAR.tip_50.SetMax(ML_STAR.tip_50.GetTotal());
      ML_STAR.trough_waste.SetMax(ML_STAR.trough_waste.GetTotal());
      ML_STAR.plate_magnet.SetCurrentPosition(1);
      ML_STAR.trough_waste.SetCurrentPosition(1);
    }
    channel_pattern = Translate("11111111");
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    customDialog_12.InitCustomDialog("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");
    customDialog_12.ShowCustomDialog();
    BOOL_MANUAL_DRYING_PROMPT = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(BOOL_MANUAL_DRYING_PROMPT);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    channel_pattern = Translate("11111111");
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_sample.SetCurrentPosition(1);
      ML_STAR.trough_elution_buffer.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_sample.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_sample, 1, ML_STAR.tip_50, 1, ML_STAR.trough_elution_buffer, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        CheckTipSeq(ML_STAR.plate_sample);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        ML_STAR.trough_elution_buffer.SetCurrentPosition(1);
        if (
           (ML_STAR.plate_sample.GetCurrentPosition() > 0 && ML_STAR.plate_sample.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_sample.SetMax(ML_STAR.plate_sample.GetTotal());
      ML_STAR.tip_50.SetMax(ML_STAR.tip_50.GetTotal());
      ML_STAR.trough_elution_buffer.SetMax(ML_STAR.trough_elution_buffer.GetTotal());
      ML_STAR.plate_sample.SetCurrentPosition(1);
      ML_STAR.trough_elution_buffer.SetCurrentPosition(1);
    }
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_sample.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_sample.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_sample, 1, ML_STAR.tip_50, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.plate_sample.GetCurrentPosition() > 0 && ML_STAR.plate_sample.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_sample.SetMax(ML_STAR.plate_sample.GetTotal());
      ML_STAR.tip_50.SetMax(ML_STAR.tip_50.GetTotal());
      ML_STAR.plate_sample.SetCurrentPosition(1);
    }
    channel_pattern = Translate("11111111");
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    BOOL_RESTART_TIMER = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(BOOL_RESTART_TIMER);
    {
      counter_restart_timer = 0;
      while (BOOL_RESTART_TIMER != NO)
      {
        counter_restart_timer = counter_restart_timer + 1;
        if( 0 == timer_eb_incubation_1.SetTimer(TIME_ELUTION_BUFFER) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer_eb_incubation_1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        customDialog_5.InitCustomDialog("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");
        customDialog_5.ShowCustomDialog();
        BOOL_RESTART_TIMER = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
        CheckRetValue(BOOL_RESTART_TIMER);
      }
    }
    channel_pattern = Translate("11111111");
    {
      counter_pipette_rounds = 0;
      ML_STAR.plate_final.SetCurrentPosition(1);
      ML_STAR.plate_magnet.SetCurrentPosition(1);
      while (
         (ML_STAR.plate_magnet.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.plate_final, 1, ML_STAR.plate_magnet, 1, ML_STAR.tip_50, 1);
        counter_pipette_rounds = counter_pipette_rounds + 1;
        CheckTipSeq(ML_STAR.plate_magnet);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.plate_magnet.GetCurrentPosition() > 0 && ML_STAR.plate_magnet.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.plate_final.SetMax(ML_STAR.plate_final.GetTotal());
      ML_STAR.plate_magnet.SetMax(ML_STAR.plate_magnet.GetTotal());
      ML_STAR.tip_50.SetMax(ML_STAR.tip_50.GetTotal());
      ML_STAR.plate_final.SetCurrentPosition(1);
      ML_STAR.plate_magnet.SetCurrentPosition(1);
    }
    channel_pattern = Translate("11111111");
    if (sim != 1)
    {
      VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.tip_50, Translate("tc50"), default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 0, ML_STAR.tip_50, 0, 8, 0, 0, Translate("Please Reload 50uL Tips!"), 999);
      TipCount::Write2(ML_STAR.tip_300, Translate("tc300"), ML_STAR);
      TipCount::Write2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR);
    }
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    STEPTRACKER::_ExitLibrary();
  } }
