private function CheckRetValue( variable retValue ) void ;
private function CheckTipSeq( sequence seq_sample ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if (sim != 1)
  {
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.tip_50, Translate("tc50"), ML_STAR.Waste, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 0, ML_STAR.tip_50, 0, 8, 0, 0, Translate("Please Reload 50uL Tips!"), 999);
    TipCount::Write2(ML_STAR.tip_300, Translate("tc300"), ML_STAR);
    TipCount::Write2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR);
  }
}

private function CheckRetValue( variable retValue ) void {
  if (retValue == ABORT)
  {
    abort;
  }
}

private function CheckTipSeq( sequence seq_sample ) void {
  private variable Tip50EndPos;
  private variable Tip300CurrentPos;
  private variable Tip300EndPos;
  private variable Tip50CurrentPos;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable Tip1000CurrentPos;
  private variable Tip1000EndPos;
  private variable num_sample_seq_remaining;
  private variable pos_seq_sample_end;
  private variable pos_seq_sample_current;
  private variable num_channels;
  private variable Tip300RemainPos;
  private variable Tip1000RemainPos;
  private variable Tip50RemainPos;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private variable RELOAD;
  pos_seq_sample_current = seq_sample.GetCurrentPosition();
  pos_seq_sample_current = pos_seq_sample_current - 1;
  pos_seq_sample_end = seq_sample.GetCount();
  num_sample_seq_remaining = pos_seq_sample_end - pos_seq_sample_current;
  if (num_sample_seq_remaining >= SYS_NUM_CHANNELS)
  {
    num_channels = SYS_NUM_CHANNELS;
  }
  else
  {
    num_channels = num_sample_seq_remaining;
  }
  RELOAD = "FALSE";
  Tip50CurrentPos = ML_STAR.tip_50.GetCurrentPosition();
  if (Tip50CurrentPos == 0)
  {
    RELOAD = "TRUE";
  }
  if (Tip50CurrentPos <= NTR50_ROW1)
  {
    Tip50EndPos = NTR50_ROW1;
  }
  else
  {
    if (Tip50CurrentPos <= NTR50_ROW2)
    {
      Tip50EndPos = NTR50_ROW2;
    }
    else
    {
      if (Tip50CurrentPos <= NTR50_ROW3)
      {
        Tip50EndPos = NTR50_ROW3;
      }
      else
      {
        if (Tip50CurrentPos <= NTR50_ROW4)
        {
          Tip50EndPos = NTR50_ROW4;
        }
      }
    }
  }
  Tip50CurrentPos = Tip50CurrentPos - 1;
  Tip50RemainPos = Tip50EndPos - Tip50CurrentPos;
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogProperty( "textBlock1.Text", num_channels );
  customDialog_3.SetCustomDialogProperty( "textBlock3.Text", Tip50RemainPos );
  customDialog_3.SetCustomDialogProperty( "textBlock5.Text", Tip50CurrentPos );
  customDialog_3.SetCustomDialogProperty( "textBlock7.Text", Tip50EndPos );
  customDialog_3.SetCustomDialogProperty( "textBlock9.Text", num_channels );
  customDialog_3.ShowCustomDialog();
  if (Tip50RemainPos < num_channels)
  {
    RELOAD = "TRUE";
  }
  if (RELOAD == "TRUE")
  {
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.tip_50, Translate("tc50"), default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 0, ML_STAR.tip_50, 0, 8, 0, 0, Translate("Please Reload 50uL Tips!"), 999);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.tip_50, Translate("tc50"), Translate("50 uL Tips Edit"), 1, 999);
  }
  RELOAD = "FALSE";
  Tip300CurrentPos = ML_STAR.tip_300.GetCurrentPosition();
  if (Tip300CurrentPos == 0)
  {
    RELOAD = "TRUE";
  }
  Tip300CurrentPos = Tip300CurrentPos - 1;
  Tip300EndPos = ML_STAR.tip_300.GetCount();
  Tip300RemainPos = Tip300EndPos - Tip300CurrentPos;
  customDialog_4.InitCustomDialog("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");
  customDialog_4.SetCustomDialogProperty( "textBlock1.Text", Tip300CurrentPos );
  customDialog_4.SetCustomDialogProperty( "textBlock2.Text", Tip300EndPos );
  customDialog_4.SetCustomDialogProperty( "textBlock5.Text", Tip300RemainPos );
  customDialog_4.ShowCustomDialog();
  if (Tip300RemainPos < num_channels)
  {
    RELOAD = "TRUE";
  }
  if (RELOAD == "TRUE")
  {
    ML_STAR.tip_300.SetCurrentPosition(1);
    TipCount::Write2(ML_STAR.tip_300, Translate("tc300"), ML_STAR);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    retValue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(retValue);
    ML_STAR._219D8AAC_B0A8_43ba_979E_6E69201AC5EC("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"); // ReloadCarrier
    TipCount::Edit2(ML_STAR.tip_300, Translate("tc300"), ML_STAR, 999);
  }
  RELOAD = "FALSE";
  Tip1000CurrentPos = ML_STAR.tip_1000.GetCurrentPosition();
  if (Tip1000CurrentPos == 0)
  {
    RELOAD = "TRUE";
  }
  Tip1000CurrentPos = Tip1000CurrentPos - 1;
  Tip1000EndPos = ML_STAR.tip_1000.GetCount();
  Tip1000RemainPos = Tip1000EndPos - Tip1000CurrentPos;
  if (Tip1000RemainPos < num_channels)
  {
    RELOAD = "TRUE";
  }
  if (RELOAD == "TRUE")
  {
    ML_STAR.tip_1000.SetCurrentPosition(1);
    TipCount::Write2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    retValue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    CheckRetValue(retValue);
    ML_STAR._219D8AAC_B0A8_43ba_979E_6E69201AC5EC("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"); // ReloadCarrier
    TipCount::Edit2(ML_STAR.tip_1000, Translate("tc1000"), ML_STAR, 999);
  }
}
